PsychoPy2experiment version="2024.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Practice Trials - SYMBIOTIK graphs_2023
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine start
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    TextComponent text_6
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In the following task, you will have to read a short question and answer that question based on the information provided in a CTI style security graph.

        The graph will display information such as node name, type, tlp level, connection type and other.


        When the question appears, read carefully as we have a set limited time to read them. Then, view the graph and  answer each question. You also have limited viewing and answering time, but not answering is preferable to random answers. Please ask the researcher is something is not clear before the experiment, as the experiment cannot be paused.

        There are 60 questions in total (and there is a 4 second break after each questions) and the answers will be always numerical that it is, pressing keys from [0-9]. In case you do not know the answer, press the key N.

        To start the experiment press <space>.
    KeyboardComponent key_start_experiment_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        import pyxid2
        import sys
        import socket
        from time import time, sleep
        #import os
        #from psychopy import event, visual, core

        # host and port of tcp tagging server
        HOST = '127.0.0.1'
        PORT = 15361
        #PORT = 51234

        # Artificial delay (ms). It may need to be increased if the time to send the tag is too long and causes tag loss.
        DELAY=0

        ## connect EEG (bitbrain)
        flag_connect_EEG = 1
        #if flag_connect_EEG:
        #    s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        #    s.connect((HOST, PORT))
        #    print(s)
        ## eeg brainvision
        if flag_connect_EEG:
            devices = pyxid2.get_xid_devices()

            dev = devices[0] # get the first device to use
            print(dev)
            dev.reset_base_timer()
            dev.reset_rt_timer()

            dev.set_pulse_duration(300)


        print('Beginning of experiment')
        if flag_connect_EEG:
            dev.activate_line(bitmask=1)
        #    message = [0, 0, 0, 0, 0, 0, 0, 0, 1, 128, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0]
        #    s.sendall(bytearray(message))

        flag_connect_fNIRS = 0
        if flag_connect_fNIRS:
            import requests
            #IP = 'http://127.0.0.1:8888'
            #IP = 'http://79.152.44.165:8888'
            IP = 'http://192.168.137.1:8888'

        if flag_connect_fNIRS:
            r = requests.post(IP + '/toggleMarker?id=%s' % 1)



        flag_connect_eye = 1
        if flag_connect_eye:
            # Host machine IP
            HOST1 = '127.0.0.1'
             # Gazepoint Port
            PORT1 = 4242
            ADDRESS1 = (HOST1, PORT1)
             # Connect to Gazepoint API
            s1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            s1.connect(ADDRESS1)

        if flag_connect_eye:
            s1.send(str.encode('<SET ID="USER_DATA" VALUE="starttimeseries" />\r\n'))
  Routine show_cross
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    TextComponent txt_show_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        import random

        x= random.uniform(0.5,1)

        print('=================================')

        k_trial = currentLoop.thisTrialN+1
        N_trials = currentLoop.nTotal
        print('Trial: %d/%d' % (k_trial,N_trials))

        if k_trial == 122:
            continueRoutine = False

        print('Show cross: on')
        if flag_connect_EEG:
            dev.activate_line(bitmask=2)
        #    message = [0, 0, 0, 0, 0, 0, 0, 0, 2, 128, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0]
        #    s.sendall(bytearray(message))

        if flag_connect_fNIRS:
            r = requests.post(IP + '/toggleMarker?id=%s' % 2)

        if flag_connect_eye:
            s1.send(str.encode('<SET ID="USER_DATA" VALUE="crosstimeseries" />\r\n'))
      End Routine:
        print('Show cross: off')
  Routine instructions
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        import random

        x= random.uniform(1,2)

        print('=================================')
        k_trial = currentLoop.thisTrialN+1
        N_trials = currentLoop.nTotal
        print('Trial: %d/%d' % (k_trial,N_trials))


        print('Instructions')
        if flag_connect_EEG:
            dev.activate_line(bitmask=3)
        #    message = [0, 0, 0, 0, 0, 0, 0, 0, 3, 128, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0]
        #    s.sendall(bytearray(message))

        if flag_connect_fNIRS:
            r = requests.post(IP + '/toggleMarker?id=%s' % 3)

        if flag_connect_eye:
            s1.send(str.encode('<SET ID="USER_DATA" VALUE="instructions" />\r\n'))
    TextComponent text_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $update_questions
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    TextComponent text_3
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Once you understand the question, press space to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent legend_instructions
      image = cti_experiment_legend_2x2_compact_no_titles.png
      pos = ( 0,-0.325)
      size = (0.445, 0.325)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine trial
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    CodeComponent code_start
      Code Type = Auto->JS
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      Before Experiment:
        i=0
      Begin Routine:
        import random

        x= random.uniform(0.5,1)

        if k_trial == 121:
            continueRoutine = False

        print('Show cross: on')
        if flag_connect_EEG:
            dev.activate_line(bitmask=4)
        #    message = [0, 0, 0, 0, 0, 0, 0, 0, 4, 128, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0]
        #    s.sendall(bytearray(message))

        if flag_connect_fNIRS:
            r = requests.post(IP + '/toggleMarker?id=%s' % 2)

        if flag_connect_eye:
            command = f'<SET ID="USER_DATA" VALUE="{graph_image} {graph_complexity} {question_complexity} {question_id}" />\r\n'
            s1.send(str.encode(command))
            #s1.send(str.encode('<SET ID="USER_DATA" VALUE="crosstimeseries" />\r\n'))
      End Routine:
        print('Responded')
        if flag_connect_EEG:
            dev.activate_line(bitmask=5)
        #    message = [0, 0, 0, 0, 0, 0, 0, 0, 5, 128, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0]
        #    s.sendall(bytearray(message))

        if flag_connect_eye:
            command = f'<SET ID="USER_DATA" VALUE="Finish trial" />\r\n'
            s1.send(str.encode(command))
    ImageComponent image
      image [set every repeat] = $graph_image
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
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    KeyboardComponent keypress
      allowedKeys = ('0','1','2','3','4','5','6','7','8','9','n','N')
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
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    ImageComponent legend
      disabled = True
      image = cti_experiment_legend_2x2_compact_no_titles.png
      pos = (0.695, 0.37)
      size = (0.395, 0.275)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine break_2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Take a short 4 second break
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    TextComponent text_5
      letterHeight = 0.04
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $"Number of blocks completed = "
        +str(blocks_completed)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        blocks_completed = 1
      End Routine:
        blocks_completed += 1
  Routine end
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        End of experiment

        Thank you
        for your participation!
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        print('End of experiment')

        if flag_connect_EEG:
            dev.activate_line(bitmask=6)
        #    message = [0, 0, 0, 0, 0, 0, 0, 0, 6, 128, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0]
        #    s.sendall(bytearray(message))

        if flag_connect_fNIRS:
            r = requests.post(IP + '/toggleMarker?id=%s' % 5)

        if flag_connect_eye:
            s1.send(str.encode('<SET ID="USER_DATA" VALUE="endtimeseries" />\r\n'))
            s1.send(str.encode('<SET ID="USER_DATA" VALUE="" />\r\n'))


        if flag_connect_fNIRS:
            r = requests.post(IP + '/toggleMarker?id=%s' % 1)



        flag_connect_eye = 0
        if flag_connect_eye:
            # Host machine IP
            HOST1 = '127.0.0.1'
             # Gazepoint Port
            PORT1 = 4242
            ADDRESS1 = (HOST1, PORT1)
             # Connect to Gazepoint API
            s1 = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            s1.connect(ADDRESS1)

        if flag_connect_eye:
            s1.send(str.encode('<SET ID="USER_DATA" VALUE="starttimeseries" />\r\n'))
  Routine long_break
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text [set every frame] = $'Take a 3 minute break.\n\nCountdown: ' + str(180 - int(t))
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        trial_num=0
      Begin Routine:
        trial_num = trials.thisN + 1
        if trial_num % 25 != 0:
            continueRoutine = False
Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = psychopy_experiment_stimuli_update_3_visual_changes_have_to_fix_incorrect_image_assignement.csv
    loopType = random
    nReps = 1
    random seed = 5
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    conditions:
      [OrderedDict([('graph_image', 'samples/6 node/6_nodes_S00002/no_caption/non_adapted.png'), ('graph_complexity', 6), ('question_complexity', 1), ('visualisation_type', 'non_adapted'), ('update_questions', 'How many CYBER OBSERVABLE nodes are in the graph?'), ('answer', 5.0), ('question_id', 1)]),
      OrderedDict([('graph_image', 'samples/6 node/6_nodes_S00005/no_caption/non_adapted.png'), ('graph_complexity', 6), ('question_complexity', 1), ('visualisation_type', 'non_adapted'), ('update_questions', 'How many nodes have TLP:GREEN?'), ('answer', 3.0), ('question_id', 2)]),
      OrderedDict([('graph_image', 'samples/6 node/6_nodes_S00008/no_caption/non_adapted.png'), ('graph_complexity', 6), ('question_complexity', 1), ('visualisation_type', 'non_adapted'), ('update_questions', 'Count the number of nodes with high connection counts (node size 7-10)'), ('answer', None), ('question_id', 3)]),
      OrderedDict([('graph_image', 'samples/6 node/6_nodes_S00014/no_caption/non_adapted.png'), ('graph_complexity', 6), ('question_complexity', 1), ('visualisation_type', 'non_adapted'), ('update_questions', 'How many low confidence (confidence 1-3) edges exist in the graph?'), ('answer', None), ('question_id', 4)])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
    Routine instructions
    Routine show_cross
    Routine trial
    Routine break_2
    Routine long_break
  LoopTerminator trials
  Routine end
